# System ode definition 
x1'=(x2)
x2'=(((k / m) * (x3 / x1)) + g)
x3'=(((1 / L) * u) - ((R / L) * x3))
# Error
e=-0.009-((x1) + ((-0.001 * (heav ((t - 5.0)))) - (-0.001 * (heav ((t - 5.1))))))
# Ctrl law
u=((7.945334034187134 * (tanh (((((- ((- (e)))) + (- ((- (e))))) + (- ((- ((- (e))))))) / (((- ((- (e)))) + ((-6.129731665128885 / e) + (4.350116337841424 + e))) + (((5.749083104498984 / e) + (1.8230566659932474 / e)) / (- ((-8.83064315579221 + e))))))))) / (- (((((- (e)) * (- (e))) + ((-5.786715919067364 * e) / (7.710286458893584 / e))) * (- (((7.5855534099496715 + e) * (-5.437413503178862 + e))))))))
# System Parameters
param R=13.8
param L=0.011
param m=0.022
param g=9.81
param k=0.023142
# Initial Conds
x1(0)=-0.005
x2(0)=0.0
x3(0)=0.0
# Time Series Outputs:
# (t,x0,...,xn,ref,y,e,u)
aux ref=-0.009
aux output=((x1) + ((-0.001 * (heav ((t - 5.0)))) - (-0.001 * (heav ((t - 5.1))))))
aux error=e
@ bounds=1000
@ total=10.0
@ DT=0.0005
done